PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['image/Acorns 1.jpg', 'image/Acorns 2.jpg', 'image/Acorns 3.jpg', 'image/Alcohol 1.jpg', 'image/Alcohol 2.jpg', 'image/Alcohol 3.jpg', 'image/Alcohol 4.jpg', 'image/Alcohol 5.jpg', 'image/Alcohol 6.jpg', 'image/Alcohol 7.jpg', 'image/Alcohol 8.jpg', 'image/Ambulance 1.jpg', 'image/Ambulance 2.jpg', 'image/Ambulance 3.jpg', 'image/Angry face 1.jpg', 'image/Angry face 2.jpg', 'image/Angry face 3.jpg', 'image/Angry face 4.jpg', 'image/Angry face 5.jpg', 'image/Angry pose 1.jpg', 'image/Angry pose 2.jpg', 'image/Animal carcass 1.jpg', 'image/Animal carcass 2.jpg', 'image/Animal carcass 3.jpg', 'image/Animal carcass 4.jpg', 'image/Animal carcass 5.jpg', 'image/Animal carcass 6.jpg', 'image/Archery 1.jpg', 'image/Archery 2.jpg', 'image/Astronaut 1.jpg', 'image/Astronaut 2.jpg', 'image/Baby 1.jpg', 'image/Baby 2.jpg', 'image/Baby 3.jpg', 'image/Baby 4.jpg', 'image/Baby 5.jpg', 'image/Baby 6.jpg', 'image/Baby 7.jpg', 'image/Baby 8.jpg', 'image/Baby 9.jpg', 'image/Baby 10.jpg', 'image/Band 1.jpg', 'image/Band 2.jpg', 'image/Bar 1.jpg', 'image/Bar 2.jpg', 'image/Bar 3.jpg', 'image/Barbeque 1.jpg', 'image/Barbeque 2.jpg', 'image/Bark 1.jpg', 'image/Bark 2.jpg', 'image/Bark 3.jpg', 'image/Bark 4.jpg', 'image/Bark 5.jpg', 'image/Bark 6.jpg', 'image/Barrels 1.jpg', 'image/BDSM 1.jpg', 'image/BDSM 2.jpg', 'image/BDSM 3.jpg', 'image/Beach 1.jpg', 'image/Beach 2.jpg', 'image/Beach 3.jpg', 'image/Beach 4.jpg', 'image/Beach 5.jpg', 'image/Beach 6.jpg', 'image/Beach 7.jpg', 'image/Beach 8.jpg', 'image/Bear 1.jpg', 'image/Bear 2.jpg', 'image/Bear 3.jpg', 'image/Bed 1.jpg', 'image/Bee 1.jpg', 'image/Biking 1.jpg', 'image/Billiards 1.jpg', 'image/Bird 1.jpg', 'image/Bird 2.jpg', 'image/Bird 3.jpg', 'image/Bird 4.jpg', 'image/Bird 5.jpg', 'image/Birthday 1.jpg', 'image/Birthday 2.jpg', 'image/Birthday 3.jpg', 'image/Bloody knife 1.jpg', 'image/Bloody knife 2.jpg', 'image/Boat 1.jpg', 'image/Bored face 1.jpg', 'image/Bored pose 1.jpg', 'image/Bored pose 2.jpg', 'image/Bored pose 3.jpg', 'image/Bored pose 4.jpg', 'image/Bored pose 5.jpg', 'image/Bored pose 6.jpg', 'image/Bottle 1.jpg', 'image/Boxing 1.jpg', 'image/Boxing 2.jpg', 'image/Bricks 1.jpg', 'image/Bridge 1.jpg', 'image/Bubble 1.jpg', 'image/Bubble 2.jpg', 'image/Building 1.jpg', 'image/Building 2.jpg', 'image/Bungee jumping 1.jpg', 'image/Bungee jumping 2.jpg', 'image/Bungee jumping 3.jpg', 'image/Camping 1.jpg', 'image/Camping 2.jpg', 'image/Camping 3.jpg', 'image/Camping 4.jpg', 'image/Camping 6.jpg', 'image/Camping 7.jpg', 'image/Camping 8.jpg', 'image/Camping 9.jpg', 'image/Camping 10.jpg', 'image/Candle 1.jpg', 'image/Car 1.jpg', 'image/Car 2.jpg', 'image/Car accident 1.jpg', 'image/Car accident 2.jpg', 'image/Car accident 3.jpg', 'image/Car accident 4.jpg', 'image/Car crash 1.jpg', 'image/Car crash 2.jpg', 'image/Car crash 3.jpg', 'image/Car race 1.jpg', 'image/Car race 2.jpg', 'image/Car race 3.jpg', 'image/Car race 4.jpg', 'image/Cardboard 1.jpg', 'image/Cardboard 2.jpg', 'image/Cardboard 3.jpg', 'image/Cat 1.jpg', 'image/Cat 2.jpg', 'image/Cat 3.jpg', 'image/Cat 4.jpg', 'image/Cat 5.jpg', 'image/Cat 6.jpg', 'image/Cat 7.jpg', 'image/Cat 8.jpg', 'image/Cat 9.jpg', 'image/Cat 10.jpg', 'image/Cat 11.jpg', 'image/Cat 12.jpg', 'image/Cat 13.jpg', 'image/Cat 14.jpg', 'image/Celebration 1.jpg', 'image/Celebration 2.jpg', 'image/Cemetery 1.jpg', 'image/Cemetery 2.jpg', 'image/Cemetery 3.jpg', 'image/Cemetery 4.jpg', 'image/Cemetery 5.jpg', 'image/Cheerleader 1.jpg', 'image/Cheerleader 2.jpg', 'image/Child labor 1.jpg', 'image/Child labor 2.jpg', 'image/Child labor 3.jpg', 'image/Child labor 4.jpg', 'image/Children 1.jpg', 'image/Chipmunk 1.jpg', 'image/Chipmunk 2.jpg', 'image/Chipmunk 3.jpg', 'image/City 1.jpg', 'image/Clean 1.jpg', 'image/Cliff diver 1.jpg', 'image/Cliff diver 2.jpg', 'image/Cliff diver 3.jpg', 'image/Cockroach 1.jpg', 'image/Cockroach 2.jpg', 'image/Cockroach 3.jpg', 'image/Cockroach 4.jpg', 'image/Coffee 1.jpg', 'image/Cold 1.jpg', 'image/Cold 2.jpg', 'image/Cold 3.jpg', 'image/Cold 4.jpg', 'image/Cold 5.jpg', 'image/Cold 6.jpg', 'image/Cold 7.jpg', 'image/Cold 8.jpg', 'image/Collaboration 1.jpg', 'image/Cotton swabs 1.jpg', 'image/Cotton swabs 2.jpg', 'image/Cotton swabs 3.jpg', 'image/Couple 1.jpg', 'image/Couple 2.jpg', 'image/Couple 3.jpg', 'image/Couple 4.jpg', 'image/Couple 5.jpg', 'image/Couple 6.jpg', 'image/Couple 7.jpg', 'image/Couple 8.jpg', 'image/Couple 9.jpg', 'image/Crosswalk 1.jpg', 'image/Crow 1.jpg', 'image/Crow 2.jpg', 'image/Cups 1.jpg', 'image/Cups 2.jpg', 'image/Cups 3.jpg', 'image/Cups 4.jpg', 'image/Dancing 1.jpg', 'image/Dancing 2.jpg', 'image/Dancing 3.jpg', 'image/Dancing 4.jpg', 'image/Dancing 5.jpg', 'image/Dancing 6.jpg', 'image/Dancing 7.jpg', 'image/Dancing 8.jpg', 'image/Dancing 9.jpg', 'image/Dead bodies 1.jpg', 'image/Dead bodies 2.jpg', 'image/Dead bodies 3.jpg', 'image/Depressed face 1.jpg', 'image/Depressed face 2.jpg', 'image/Depressed pose 1.jpg', 'image/Depressed pose 2.jpg', 'image/Depressed pose 3.jpg', 'image/Depressed pose 4.jpg', 'image/Desert 1.jpg', 'image/Dessert 1.jpg', 'image/Dessert 2.jpg', 'image/Dessert 3.jpg', 'image/Dessert 4.jpg', 'image/Dessert 5.jpg', 'image/Dessert 6.jpg', 'image/Dessert 7.jpg', 'image/Dessert 8.jpg', 'image/Destruction 1.jpg', 'image/Destruction 2.jpg', 'image/Destruction 3.jpg', 'image/Destruction 4.jpg', 'image/Destruction 5.jpg', 'image/Destruction 6.jpg', 'image/Destruction 7.jpg', 'image/Destruction 8.jpg', 'image/Destruction 9.jpg', 'image/Destruction 10.jpg', 'image/Dirt 1.jpg', 'image/Dirt 2.jpg', 'image/Dirt 3.jpg', 'image/Dirt 4.jpg', 'image/Dirt 5.jpg', 'image/Dock 1.jpg', 'image/Doctor 1.jpg', 'image/Doctor 2.jpg', 'image/Doctor 3.jpg', 'image/Doctor 4.jpg', 'image/Doctor 5.jpg', 'image/Doctor 6.jpg', 'image/Doctor 7.jpg', 'image/Doctor 8.jpg', 'image/Doctor 9.jpg', 'image/Dog 1.jpg', 'image/Dog 2.jpg', 'image/Dog 3.jpg', 'image/Dog 4.jpg', 'image/Dog 5.jpg', 'image/Dog 6.jpg', 'image/Dog 7.jpg', 'image/Dog 8.jpg', 'image/Dog 9.jpg', 'image/Dog 10.jpg', 'image/Dog 11.jpg', 'image/Dog 12.jpg', 'image/Dog 13.jpg', 'image/Dog 14.jpg', 'image/Dog 15.jpg', 'image/Dog 16.jpg', 'image/Dog 17.jpg', 'image/Dog 18.jpg', 'image/Dog 19.jpg', 'image/Dog 20.jpg', 'image/Dog 21.jpg', 'image/Dog 22.jpg', 'image/Dog 23.jpg', 'image/Dog 24.jpg', 'image/Dog 25.jpg', 'image/Dog 26.jpg', 'image/Dog 27.jpg', 'image/Dog 28.jpg', 'image/Dog 29.jpg', 'image/Dog 30.jpg', 'image/Dog 31.jpg', 'image/Dog attack 1.jpg', 'image/Dog attack 2.jpg', 'image/Dog attack 3.jpg', 'image/Drink 1.jpg', 'image/Drink 2.jpg', 'image/Dummy 1.jpg', 'image/Eating 1.jpg', 'image/Eating 2.jpg', 'image/Eating 3.jpg', 'image/Elephant 1.jpg', 'image/Excited face 1.jpg', 'image/Excited face 2.jpg', 'image/Excited face 3.jpg', 'image/Excited face 4.jpg', 'image/Excited face 5.jpg', 'image/Excited face 6.jpg', 'image/Excited face 7.jpg', 'image/Exercise 1.jpg', 'image/Exercise 2.jpg', 'image/Exercise 3.jpg', 'image/Explosion 1.jpg', 'image/Explosion 2.jpg', 'image/Explosion 3.jpg', 'image/Explosion 4.jpg', 'image/Explosion 5.jpg', 'image/Explosion 6.jpg', 'image/Father 1.jpg', 'image/Feces 1.jpg', 'image/Feces 2.jpg', 'image/Fence 1.jpg', 'image/Fence 2.jpg', 'image/Fence 3.jpg', 'image/Fence 4.jpg', 'image/Fence 5.jpg', 'image/Fence 6.jpg', 'image/Ferret 1.jpg', 'image/Fire 1.jpg', 'image/Fire 2.jpg', 'image/Fire 3.jpg', 'image/Fire 4.jpg', 'image/Fire 5.jpg', 'image/Fire 6.jpg', 'image/Fire 7.jpg', 'image/Fire 8.jpg', 'image/Fire 9.jpg', 'image/Fire 10.jpg', 'image/Fire 11.jpg', 'image/Fire hydrant 1.jpg', 'image/Fire hydrant 2.jpg', 'image/Fire hydrant 3.jpg', 'image/Fire hydrant 4.jpg', 'image/Fireman 1.jpg', 'image/Fireworks 1.jpg', 'image/Fireworks 2.jpg', 'image/Fireworks 3.jpg', 'image/Fireworks 4.jpg', 'image/Fireworks 5.jpg', 'image/Fireworks 6.jpg', 'image/Fireworks 7.jpg', 'image/Flood 1.jpg', 'image/Flood 2.jpg', 'image/Flood 3.jpg', 'image/Flowers 1.jpg', 'image/Flowers 2.jpg', 'image/Flowers 3.jpg', 'image/Flowers 4.jpg', 'image/Flowers 5.jpg', 'image/Flowers 6.jpg', 'image/Flowers 7.jpg', 'image/Flowers 8.jpg', 'image/Flowers 9.jpg', 'image/Flowers 10.jpg', 'image/Food 1.jpg', 'image/Food 2.jpg', 'image/Food 3.jpg', 'image/Food 4.jpg', 'image/Food 5.jpg', 'image/Food 6.jpg', 'image/Football player 1.jpg', 'image/Frisbee 1.jpg', 'image/Frustrated pose 1.jpg', 'image/Frustrated pose 2.jpg', 'image/Frustrated pose 3.jpg', 'image/Frustrated pose 4.jpg', 'image/Frustrated pose 5.jpg', 'image/Frustrated pose 6.jpg', 'image/Frustrated pose 7.jpg', 'image/Frustrated pose 8.jpg', 'image/Funeral 1.jpg', 'image/Galaxy 1.jpg', 'image/Galaxy 2.jpg', 'image/Galaxy 3.jpg', 'image/Galaxy 4.jpg', 'image/Galaxy 5.jpg', 'image/Galaxy 6.jpg', 'image/Galaxy 7.jpg', 'image/Galaxy 8.jpg', 'image/Garbage dump 1.jpg', 'image/Garbage dump 2.jpg', 'image/Garbage dump 3.jpg', 'image/Garbage dump 4.jpg', 'image/Garbage dump 5.jpg', 'image/Garbage dump 6.jpg', 'image/Garbage dump 7.jpg', 'image/Garbage dump 8.jpg', 'image/Gargoyle 1.jpg', 'image/Gargoyle 2.jpg', 'image/Gazing 1.jpg', 'image/Gazing 2.jpg', 'image/Gazing 3.jpg', 'image/Gazing 4.jpg', 'image/Gazing 5.jpg', 'image/Gazing 6.jpg', 'image/Gazing 7.jpg', 'image/Goat 1.jpg', 'image/Goat 2.jpg', 'image/Gorrila 1.jpg', 'image/Grass 1.jpg', 'image/Grass 2.jpg', 'image/Grass 3.jpg', 'image/Grass 4.jpg', 'image/Grass 5.jpg', 'image/Grass 6.jpg', 'image/Grass 7.jpg', 'image/Graveyard 1.jpg', 'image/Graveyard 2.jpg', 'image/Graveyard 3.jpg', 'image/Graveyard 4.jpg', 'image/Guitar 1.jpg', 'image/Gun 1.jpg', 'image/Gun 2.jpg', 'image/Gun 3.jpg', 'image/Gun 4.jpg', 'image/Gun 5.jpg', 'image/Gun 6.jpg', 'image/Gun 7.jpg', 'image/Gun 8.jpg', 'image/Gun 9.jpg', 'image/Gun 10.jpg', 'image/Hallway 1.jpg', 'image/Hang gliding 1.jpg', 'image/Hang gliding 2.jpg', 'image/Hang gliding 3.jpg', 'image/Hangover 1.jpg', 'image/Happy face 1.jpg', 'image/Happy face 2.jpg', 'image/Happy pose 1.jpg', 'image/Happy pose 2.jpg', 'image/Happy pose 3.jpg', 'image/Heart 1.jpg', 'image/Heart 2.jpg', 'image/Heart 3.jpg', 'image/Horse 1.jpg', 'image/Horse racing 1.jpg', 'image/House 1.jpg', 'image/Injury 1.jpg', 'image/Injury 2.jpg', 'image/Injury 3.jpg', 'image/Injury 4.jpg', 'image/Intensity 1.jpg', 'image/Jail 1.jpg', 'image/Jail 2.jpg', 'image/Jail 3.jpg', 'image/Jail 4.jpg', 'image/Jail 5.jpg', 'image/Keyboard 1.jpg', 'image/Keyboard 2.jpg', 'image/Keyboard 3.jpg', 'image/Keys 1.jpg', 'image/KKK rally 1.jpg', 'image/KKK rally 2.jpg', 'image/Knife 1.jpg', 'image/Knife 2.jpg', 'image/Lake 1.jpg', 'image/Lake 2.jpg', 'image/Lake 3.jpg', 'image/Lake 4.jpg', 'image/Lake 5.jpg', 'image/Lake 6.jpg', 'image/Lake 7.jpg', 'image/Lake 8.jpg', 'image/Lake 9.jpg', 'image/Lake 10.jpg', 'image/Lake 11.jpg', 'image/Lake 12.jpg', 'image/Lake 13.jpg', 'image/Lake 14.jpg', 'image/Lake 15.jpg', 'image/Lake 16.jpg', 'image/Lake 17.jpg', 'image/Lamb 1.jpg', 'image/Lava 1.jpg', 'image/Lightning 1.jpg', 'image/Lightning 2.jpg', 'image/Lightning 3.jpg', 'image/Lightning 4.jpg', 'image/Lightning 5.jpg', 'image/Lightning 6.jpg', 'image/Lightning 7.jpg', 'image/Lion 1.jpg', 'image/Lion 2.jpg', 'image/Lion 3.jpg', 'image/Lion 4.jpg', 'image/Lion 5.jpg', 'image/Massage 1.jpg', 'image/Massage 2.jpg', 'image/Meerkat 1.jpg', 'image/Memorial 1.jpg', 'image/Memorial 2.jpg', 'image/Memorial 3.jpg', 'image/Miserable face 1.jpg', 'image/Miserable face 2.jpg', 'image/Miserable pose 1.jpg', 'image/Miserable pose 2.jpg', 'image/Miserable pose 3.jpg', 'image/Miserable pose 4.jpg', 'image/Miserable pose 5.jpg', 'image/Money 1.jpg', 'image/Monkey 1.jpg', 'image/Monkey 2.jpg', 'image/Monkey 3.jpg', 'image/Monkey 4.jpg', 'image/Moon 1.jpg', 'image/Mother 1.jpg', 'image/Mother 2.jpg', 'image/Mother 3.jpg', 'image/Mother 4.jpg', 'image/Mother 5.jpg', 'image/Mother 6.jpg', 'image/Mother 7.jpg', 'image/Mother 8.jpg', 'image/Mother 9.jpg', 'image/Motocross 1.jpg', 'image/Musician 1.jpg', 'image/Nature 1.jpg', 'image/Nature 2.jpg', 'image/Neonazi 1.jpg', 'image/Neutral face 1.jpg', 'image/Neutral face 2.jpg', 'image/Neutral face 3.jpg', 'image/Neutral face 4.jpg', 'image/Neutral face 5.jpg', 'image/Neutral pose 1.jpg', 'image/Neutral pose 2.jpg', 'image/Neutral pose 3.jpg', 'image/Nude couple 1.jpg', 'image/Nude couple 2.jpg', 'image/Nude couple 3.jpg', 'image/Nude couple 4.jpg', 'image/Nude couple 5.jpg', 'image/Nude couple 6.jpg', 'image/Nude couple 7.jpg', 'image/Nude couple 8.jpg', 'image/Nude couple 9.jpg', 'image/Nude couple 10.jpg', 'image/Nude couple 11.jpg', 'image/Nude couple 12.jpg', 'image/Nude couple 13.jpg', 'image/Nude couple 14.jpg', 'image/Nude man 1.jpg', 'image/Nude man 2.jpg', 'image/Nude man 3.jpg', 'image/Nude man 4.jpg', 'image/Nude man 5.jpg', 'image/Nude man 6.jpg', 'image/Nude man 7.jpg', 'image/Nude man 8.jpg', 'image/Nude man 9.jpg', 'image/Nude man 10.jpg', 'image/Nude man 11.jpg', 'image/Nude man 12.jpg', 'image/Nude man 13.jpg', 'image/Nude man 14.jpg', 'image/Nude man 15.jpg', 'image/Nude man 16.jpg', 'image/Nude man 17.jpg', 'image/Nude man 18.jpg', 'image/Nude man 19.jpg', 'image/Nude man 20.jpg', 'image/Nude man 21.jpg', 'image/Nude man 22.jpg', 'image/Nude man 23.jpg', 'image/Nude woman 1.jpg', 'image/Nude woman 2.jpg', 'image/Nude woman 3.jpg', 'image/Nude woman 4.jpg', 'image/Nude woman 5.jpg', 'image/Nude woman 6.jpg', 'image/Nude woman 7.jpg', 'image/Nude woman 8.jpg', 'image/Nude woman 9.jpg', 'image/Nude woman 10.jpg', 'image/Nude woman 11.jpg', 'image/Nude woman 12.jpg', 'image/Nude woman 13.jpg', 'image/Nude woman 14.jpg', 'image/Nude woman 15.jpg', 'image/Nude woman 16.jpg', 'image/Nude woman 17.jpg', 'image/Nude woman 18.jpg', 'image/Nude woman 19.jpg', 'image/Nude woman 20.jpg', 'image/Nude woman 21.jpg', 'image/Nude woman 22.jpg', 'image/Office supplies 1.jpg', 'image/Office supplies 2.jpg', 'image/Office supplies 3.jpg', 'image/Office supplies 4.jpg', 'image/Office supplies 5.jpg', 'image/Opossum 1.jpg', 'image/Orangutan 1.jpg', 'image/Ornament 1.jpg', 'image/Paintbrush 1.jpg', 'image/Paper 1.jpg', 'image/Paper 2.jpg', 'image/Paper 3.jpg', 'image/Paper 4.jpg', 'image/Paper 5.jpg', 'image/Paperclips 1.jpg', 'image/Paperclips 2.jpg', 'image/Paperclips 3.jpg', 'image/Paperclips 4.jpg', 'image/Parachuting 1.jpg', 'image/Parachuting 2.jpg', 'image/Parachuting 3.jpg', 'image/Parachuting 4.jpg', 'image/Parade 1.jpg', 'image/Parasailing 1.jpg', 'image/Parasailing 2.jpg', 'image/Parasailing 3.jpg', 'image/Parasailing 4.jpg', 'image/Party 1.jpg', 'image/Path 1.jpg', 'image/Penguins 1.jpg', 'image/Penguins 2.jpg', 'image/Performance 1.jpg', 'image/Performance 2.jpg', 'image/Phone 1.jpg', 'image/Picnic 1.jpg', 'image/Picnic 2.jpg', 'image/Picnic 3.jpg', 'image/Picnic 4.jpg', 'image/Pig 1.jpg', 'image/Pig 2.jpg', 'image/Pigeon 1.jpg', 'image/Pigeon 2.jpg', 'image/Pigeon 3.jpg', 'image/Pigeon 4.jpg', 'image/Pigeon 5.jpg', 'image/Pigeon 6.jpg', 'image/Pinecone 1.jpg', 'image/Pinecone 2.jpg', 'image/Pinecone 3.jpg', 'image/Pinecone 4.jpg', 'image/Plane crash 1.jpg', 'image/Plane crash 2.jpg', 'image/Plane crash 3.jpg', 'image/Plane crash 4.jpg', 'image/Police 1.jpg', 'image/Police 2.jpg', 'image/Police 3.jpg', 'image/Police 4.jpg', 'image/Police 5.jpg', 'image/Pollution 1.jpg', 'image/Power lines 1.jpg', 'image/Present 1.jpg', 'image/Present 2.jpg', 'image/Prison 1.jpg', 'image/Prison 2.jpg', 'image/Pumpkin 1.jpg', 'image/Raccoon 1.jpg', 'image/Rafting 1.jpg', 'image/Rafting 2.jpg', 'image/Rafting 3.jpg', 'image/Rafting 4.jpg', 'image/Rafting 5.jpg', 'image/Rafting 6.jpg', 'image/Railroad 1.jpg', 'image/Rainbow 1.jpg', 'image/Rainbow 2.jpg', 'image/Research 1.jpg', 'image/Road 1.jpg', 'image/Rock climbing 1.jpg', 'image/Rock climbing 2.jpg', 'image/Rock climbing 3.jpg', 'image/Rock climbing 4.jpg', 'image/Rocks 1.jpg', 'image/Rocks 2.jpg', 'image/Rocks 3.jpg', 'image/Rocks 4.jpg', 'image/Rocks 5.jpg', 'image/Rocks 6.jpg', 'image/Rocks 7.jpg', 'image/Rollercoaster 1.jpg', 'image/Rollercoaster 2.jpg', 'image/Rollercoaster 3.jpg', 'image/Roofing 1.jpg', 'image/Roofing 2.jpg', 'image/Roofing 3.jpg', 'image/Roofing 4.jpg', 'image/Roofing 5.jpg', 'image/Rooster 1.jpg', 'image/Rubber duck 1.jpg', 'image/Rugby 1.jpg', 'image/Rugby 2.jpg', 'image/Running away 1.jpg', 'image/Sad face 1.jpg', 'image/Sad face 2.jpg', 'image/Sad face 3.jpg', 'image/Sad face 4.jpg', 'image/Sad face 5.jpg', 'image/Sad face 6.jpg', 'image/Sad face 7.jpg', 'image/Sad face 8.jpg', 'image/Sad face 9.jpg', 'image/Sad pose 1.jpg', 'image/Sad pose 2.jpg', 'image/Sad pose 3.jpg', 'image/Sad pose 4.jpg', 'image/Sad pose 5.jpg', 'image/Sad pose 6.jpg', 'image/Sad pose 7.jpg', 'image/Sailing 1.jpg', 'image/Sailing 2.jpg', 'image/Sailing 3.jpg', 'image/Satellite 1.jpg', 'image/Scared cat 1.jpg', 'image/Scared face 1.jpg', 'image/Scared face 2.jpg', 'image/Scared face 3.jpg', 'image/Scared face 4.jpg', 'image/Scared face 5.jpg', 'image/Scary face 1.jpg', 'image/Scary face 2.jpg', 'image/School 1.jpg', 'image/School 2.jpg', 'image/School 3.jpg', 'image/School 4.jpg', 'image/School 5.jpg', 'image/School 6.jpg', 'image/School 7.jpg', 'image/School 8.jpg', 'image/Seal 1.jpg', 'image/Severed finger 1.jpg', 'image/Shark 1.jpg', 'image/Shark 2.jpg', 'image/Shark 3.jpg', 'image/Shark 4.jpg', 'image/Shark 5.jpg', 'image/Shark 6.jpg', 'image/Shark 7.jpg', 'image/Shark 8.jpg', 'image/Shark 9.jpg', 'image/Shark 10.jpg', 'image/Shark 11.jpg', 'image/Shooting 1.jpg', 'image/Shot 1.jpg', 'image/Shot 2.jpg', 'image/Shot 3.jpg', 'image/Shot 4.jpg', 'image/Shot 5.jpg', 'image/Siblings 1.jpg', 'image/Sidewalk 1.jpg', 'image/Sidewalk 2.jpg', 'image/Sidewalk 3.jpg', 'image/Sidewalk 4.jpg', 'image/Sidewalk 5.jpg', 'image/Sidewalk 6.jpg', 'image/Skier 1.jpg', 'image/Skijump 1.jpg', 'image/Skijump 2.jpg', 'image/Skinhead 1.jpg', 'image/Sky 1.jpg', 'image/Skydiving 1.jpg', 'image/Skydiving 2.jpg', 'image/Skydiving 3.jpg', 'image/Skydiving 4.jpg', 'image/Skydiving 5.jpg', 'image/Skyscraper 1.jpg', 'image/Skyscraper 2.jpg', 'image/Sleepy pose 1.jpg', 'image/Sleepy pose 2.jpg', 'image/Sleepy pose 3.jpg', 'image/Sleepy pose 4.jpg', 'image/Smiling face 1.jpg', 'image/Snake 1.jpg', 'image/Snake 2.jpg', 'image/Snake 3.jpg', 'image/Snake 4.jpg', 'image/Snake 5.jpg', 'image/Snake 6.jpg', 'image/Snow 1.jpg', 'image/Snow 2.jpg', 'image/Snow 3.jpg', 'image/Snow 4.jpg', 'image/Snow 5.jpg', 'image/Soccer 1.jpg', 'image/Soccer 2.jpg', 'image/Socks 1.jpg', 'image/Solar panel 1.jpg', 'image/Soldiers 1.jpg', 'image/Soldiers 2.jpg', 'image/Soldiers 3.jpg', 'image/Soldiers 4.jpg', 'image/Soldiers 5.jpg', 'image/Soldiers 6.jpg', 'image/Soldiers 7.jpg', 'image/Soldiers 8.jpg', 'image/Soldiers 9.jpg', 'image/Soldiers 10.jpg', 'image/Soup 1.jpg', 'image/Spider 1.jpg', 'image/Spider 2.jpg', 'image/Statue 1.jpg', 'image/Statue 2.jpg', 'image/Stingray 1.jpg', 'image/Stingray 2.jpg', 'image/Stingray 3.jpg', 'image/Storage 1.jpg', 'image/Storage 2.jpg', 'image/Storage 3.jpg', 'image/Street 1.jpg', 'image/Street 2.jpg', 'image/Street 3.jpg', 'image/Street 4.jpg', 'image/Street 5.jpg', 'image/Sun 1.jpg', 'image/Sunflower 1.jpg', 'image/Sunset 1.jpg', 'image/Sunset 2.jpg', 'image/Sunset 3.jpg', 'image/Sunset 4.jpg', 'image/Sunset 5.jpg', 'image/Sunset 6.jpg', 'image/Surgery 1.jpg', 'image/Surgery 2.jpg', 'image/Surgery 3.jpg', 'image/Surgery 4.jpg', 'image/Surgery 5.jpg', 'image/Surprise 1.jpg', 'image/Surprise 2.jpg', 'image/Swimming 1.jpg', 'image/Swingset 1.jpg', 'image/Thunderstorm 1.jpg', 'image/Thunderstorm 2.jpg', 'image/Thunderstorm 3.jpg', 'image/Thunderstorm 4.jpg', 'image/Thunderstorm 5.jpg', 'image/Thunderstorm 6.jpg', 'image/Thunderstorm 7.jpg', 'image/Thunderstorm 8.jpg', 'image/Thunderstorm 9.jpg', 'image/Thunderstorm 10.jpg', 'image/Thunderstorm 11.jpg', 'image/Tickling 1.jpg', 'image/Tiger 1.jpg', 'image/Tiger 2.jpg', 'image/Timber 1.jpg', 'image/Timber 2.jpg', 'image/Timber 3.jpg', 'image/Timber 4.jpg', 'image/Toast 1.jpg', 'image/Toilet 1.jpg', 'image/Toilet 2.jpg', 'image/Toilet 3.jpg', 'image/Toilet 4.jpg', 'image/Tornado 1.jpg', 'image/Tornado 2.jpg', 'image/Tornado 3.jpg', 'image/Tornado 4.jp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jpg', 'image/Yarn 2.jpg', 'image/Yarn 3.jpg', 'image/Yarn 4.jpg', 'image/Yoga 1.jpg', 'image/Yoga 2.jpg', 'image/Yoga 3.jpg', 'image/Yoga 4.jpg', 'image/Yoga 5.jpg', 'image/Zebra 1.jpg', 'images.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = emotibit_validation_study
  expVersion = alpha
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
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      Before Experiment:
        print("+++ welcome_code | START | Before experiment")
        import csv

        # Initialize category lists
        persons = []
        scenes = []
        objects = []
        animals = []

        # Create a dictionary to replicate the JS Map structure
        IMAGES = {}

        print("Fetching images.")

        # Open and read the CSV
        with open('images.csv', newline='', encoding='utf-8') as csvfile:
            reader = csv.reader(csvfile)
            next(reader)  # Skip the header row
            for row in reader:
                if len(row) < 3:
                    continue
                category = row[1]
                filename = row[2]
                if category == "Person":
                    persons.append(filename)
                elif category == "Scene":
                    scenes.append(filename)
                elif category == "Object":
                    objects.append(filename)
                elif category == "Animal":
                    animals.append(filename)

        # Populate the IMAGES dictionary
        IMAGES["person"] = persons
        IMAGES["scene"] = scenes
        IMAGES["object"] = objects
        IMAGES["animal"] = animals
        print("IMAGES.keys() : ", IMAGES.keys())
        print("+++ welcome_code | END | Before experiment")
      Begin Experiment:
        import pylsl
        from pylsl import StreamInfo, StreamOutlet
        import time

        IMAGE_ORDER = []

        # Create LSL outlet for markers
        info = StreamInfo(name='Experiment Markers', type='Markers', channel_count=1,
                          channel_format='string', source_id='psychopy_markers')
        outlet = StreamOutlet(info)

        print("LSL Marker outlet created successfully")
      Begin Routine:
        print("+++ welcome_code | START | Begin routine")

        if block.thisN == 0:
            print("\n+++++Block 1\n")
            text.text = welcome_1.text
        elif block.thisN == 1:
            text.text = welcome_2.text
            print("\n+++++Block 2\n")
        elif block.thisN == 2:
            text.text = welcome_3.text
            print("\n+++++Block 3\n")

        import random
        # Get the block number (0, 1, 2, etc.)
        block_num = int(thisBlock.thisN) + 1  # Block number (1, 2, 3)
        marker = f"BLOCK_START|block_id:{block_num}"
        outlet.push_sample([marker])

        print(f"Block {block_num}")
        print(f"Marker sent: {marker}")

        # Define how many images are availble per block
        images_per_block = 40

        # Calculate the portion for this block
        start_idx = block_num * images_per_block
        end_idx = start_idx + images_per_block

        # Extract the portion for this block
        RANDOM_IMAGES = IMAGE_ORDER[start_idx:end_idx]

        print("+++ welcome_code | END | Begin routine")


        ## Initialize the final list
        #routine_image_list = []
        #
        ## Randomly sample 10 from each category and combine
        #for key in ["person", "scene", "object", "animal"]:
        #    if key in IMAGES:
        #        images = IMAGES[key]
        #        sample = random.sample(images, min(10, len(images)))
        #        routine_image_list.extend(sample)
        #
        ## Store the randomized list
        #RANDOM_IMAGES = routine_image_list.copy()
        #
        #print("RANDOM_IMAGES:", RANDOM_IMAGES)
        #print("+++ welcome_code | END | Begin routine")
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = c
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    KeyboardComponent welcome_key_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent welcome_1
      letterHeight = 0.05
      startVal [time (s)] = 00
      stopVal [duration (s)] = 0
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      text:
        Welcome to the experiment!

        In this phase, you will remain seated. A new image will appear every 2-10 seconds. Before each image, you will see a fixation point. After each image, there will be a brief blank screen. As soon as you see the image, press the spacebar immediately.

        Press the spacebar now to begin Phase 1.
    TextComponent welcome_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        You're done with phase 1!

        In this phase, you will stand. A new image will appear every 2-10 seconds. Before each image, you will see a fixation point. After each image, there will be a blank screen. As soon as you see the image, press the spacebar immediately.

        Press the spacebar now to begin Phase 2.
    TextComponent welcome_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        In this final phase, you will be seated again.

        A new image will appear every 2-10 seconds. You will see a fixation point before each image and a blank screen after each image. Press the spacebar immediately when you see the image.

        Press the spacebar now to begin Phase 3.
  Routine break_block
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 5
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    CodeComponent break_code
      Code Type = Py
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      Begin Routine:
        task_timer = core.CountdownTimer(start = 5)
        outlet.push_sample(['BLOCK_END'])
      Each Frame:
        # end task after 5 secs
        time_left = task_timer.getTime()
        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        text_countdown.text = seconds
        if time_left <= 0.0:
            continueRoutine = False
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = Take a small break
      units = norm
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  Routine wait
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial
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    TextComponent text_fixationCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image [set every repeat] = $image_path
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    KeyboardComponent image_key_input
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    CodeComponent trial_code
      Code Type = Py
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      Begin Experiment:
        print("+++ trial_code | START | Begin experiment")

        import csv
        import random
        import time

        IMAGE_ORDER = []



        # Send experiment start marker
        outlet.push_sample(['EXP_START'])

        # read csv
        with open("images.csv") as f:
            reader = csv.reader(f)
            next(reader, None) # skip header
            for row in reader:
                image_path = row[2]
                IMAGE_ORDER.append(image_path)

        random.shuffle(IMAGE_ORDER)
        print("After shuffle (len): ", len(IMAGE_ORDER))



        print("+++ trial_code | END | Begin experiment")
      Begin Routine:
        print("+++ trial_code | START | Begin Routine")

        import random
        import time

        random_duration = random.randint(2,5)

        image_path = RANDOM_IMAGES[loops.thisN]
        trial_num = loops.thisN + 1
        block_num = int(thisBlock.thisN) + 1

        # Send trial and image markers
        outlet.push_sample([f"TRIAL_START|block_id:{block_num}|trial_id:{trial_num}"])
        outlet.push_sample([f"IMAGE|block_id:{block_num}|trial_id:{trial_num}|image:{image_path}"])


        # Store trial start time for RT calculation
        trial_start_time = time.time()

        print("loops.thisN : ", loops.thisN)
        print("image_path : ", image_path)
        image.setImage(image_path)


        print("+++ trial_code | END| Begin Routine")
      Each Frame:
        import time

        # Wait a brief moment before listening for spacebar to avoid capturing the block-start keypress
        elapsed_time = time.time() - trial_start_time
        if elapsed_time > 0.1:  # Start listening after 100ms
            keys = event.getKeys(keyList=['space'])

            if 'space' in keys:
                reaction_time = time.time() - trial_start_time
                block_num = int(thisBlock.thisN) + 1
                trial_num = loops.thisN + 1

                marker_data = f"SPACEBAR|block_id:{block_num}|trial_id:{trial_num}|rt:{reaction_time:.3f}"
                outlet.push_sample([marker_data])

                print(f"+++ SPACEBAR PRESSED | Block: {block_num} | Trial: {trial_num} | RT: {reaction_time:.3f}s | image_path: {image_path}")
        #        trial.finished = True
  Routine sdfasdfafasf
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    PolygonComponent fixation_2afc
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent left_img
      image [set during: images_2afc.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    StaticComponent ISI_load_images
      saveData = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_img
      image [set during: images_2afc.ISI_load_images] = default.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_2afc
      clickable = left_img, right_img
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine end_experiment
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!

        Press the special key to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent code_end
      Code Type = Py
      End Experiment:
        outlet.push_sample(['EXP_END'])
        print("Experiment complete - marker sent")

        ## File Template:
        # %p_%d_%H-%M-%S.xdf
  Routine experimenter_check
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    TextComponent text_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click the key when all is in place

        Check lsl with `space`
    KeyboardComponent key_resp
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Each Frame:
        import time

        keys = event.getKeys(keyList=['space'])

        if 'space' in keys:
            this_time = time.time()
            marker_data  = f"BEFORE_BLOCK|time:{this_time:.3f}s"
            outlet.push_sample([marker_data])
            print(marker_data)
        #        trial.finished = True
Flow
  Routine experimenter_check
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine welcome
    LoopInitiator loops loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine trial
      Routine wait
    LoopTerminator loops
    Routine break_block
  LoopTerminator block
  Routine end_experiment
