PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images.csv', 'image/Acorns 1.jpg', 'image/Acorns 2.jpg', 'image/Acorns 3.jpg', 'image/Alcohol 1.jpg', 'image/Alcohol 2.jpg', 'image/Alcohol 3.jpg', 'image/Alcohol 4.jpg', 'image/Alcohol 5.jpg', 'image/Alcohol 6.jpg', 'image/Alcohol 7.jpg', 'image/Alcohol 8.jpg', 'image/Ambulance 1.jpg', 'image/Ambulance 2.jpg', 'image/Ambulance 3.jpg', 'image/Angry face 1.jpg', 'image/Angry face 2.jpg', 'image/Angry face 3.jpg', 'image/Angry face 4.jpg', 'image/Angry face 5.jpg', 'image/Angry pose 1.jpg', 'image/Angry pose 2.jpg', 'image/Animal carcass 1.jpg', 'image/Animal carcass 2.jpg', 'image/Animal carcass 3.jpg', 'image/Animal carcass 4.jpg', 'image/Animal carcass 5.jpg', 'image/Animal carcass 6.jpg', 'image/Archery 1.jpg', 'image/Archery 2.jpg', 'image/Astronaut 1.jpg', 'image/Astronaut 2.jpg', 'image/Baby 1.jpg', 'image/Baby 2.jpg', 'image/Baby 3.jpg', 'image/Baby 4.jpg', 'image/Baby 5.jpg', 'image/Baby 6.jpg', 'image/Baby 7.jpg', 'image/Baby 8.jpg', 'image/Baby 9.jpg', 'image/Baby 10.jpg', 'image/Band 1.jpg', 'image/Band 2.jpg', 'image/Bar 1.jpg', 'image/Bar 3.jpg', 'image/Barbeque 1.jpg', 'image/Barbeque 2.jpg', 'image/Bark 1.jpg', 'image/Bark 2.jpg', 'image/Bark 3.jpg', 'image/Bark 4.jpg', 'image/Bark 5.jpg', 'image/Bark 6.jpg', 'image/Barrels 1.jpg', 'image/BDSM 1.jpg', 'image/BDSM 2.jpg', 'image/BDSM 3.jpg', 'image/Beach 1.jpg', 'image/Beach 2.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = image_shower
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = image/Acorns 1.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = $random_duration
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import csv
        import random
        IMAGE_ORDER = []

        # read csv
        with open("images.csv") as f:
            reader = csv.reader(f)
            next(reader, None) # skip header
            for row in reader:
                image_path = row[2]
                IMAGE_ORDER.append(image_path)

        print(IMAGE_ORDER[0])
        random.shuffle(IMAGE_ORDER)
        print(IMAGE_ORDER[0])
      Begin JS Routine:
        let image_time_range = 1;

        random_duration = 2 + Math.floor(Math.random() * image_time_range);
        //text_2.text = random_duration;

        image_path = window.RANDOM_IMAGES[loops.thisN];
        image.image = image_path;
      Begin Routine:
        import random
        random_duration = random.randint(2,10)
        text_2.text = random_duration

        image_path = IMAGE_ORDER[loops.thisN]
        print(image_path)
        image.Image = image_path
    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 0
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  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = c
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    CodeComponent code_2
      Code Type = Both
      Before JS Experiment:
        window.IMAGES = new Map();

        fetch('images.csv')
              .then(response => response.text())
              .then(text => {
                const lines = text.split("\n");
                // 4 categories
                let persons = [];
                let scenes = [];
                let objects = [];
                let animals = [];
                for (let i = 1; i < lines.length; i++) {
                    const line = lines[i];
                    const values = line.split(',');
                    if (values[1] === "Person") {
                        persons.push(values[2]);
                    }
                    if (values[1] === "Scene") {
                        scenes.push(values[2]);
                    }
                    if (values[1] === "Object") {
                        objects.push(values[2]);
                    }
                    if (values[1] === "Animal") {
                        animals.push(values[2]);
                    }
                }
                window.IMAGES.set("person", persons);
                window.IMAGES.set("scene", scenes);
                window.IMAGES.set("object", objects);
                window.IMAGES.set("animal", animals);
              });
      Begin JS Routine:
        //if (trials.thisN === 0) {
        //    text.text = welcome_1.text;
        //} else if (trials.thisN === 1) {
        //    text.text = welcome_2.text;
        //} else if (trials.thisN === 2) {
        //    text.text = welcome_3.text;
        //}
        //
        //// Initialize list of 40 images
        //routine_image_list = []
        //
        //for (let key in window.IMAGES) {
        //    const arr = window.IMAGES[key]
        //    console.log(key, arr);
        //    const slice = arr.slice(0, 10).sort(() => 0.5 - Math.random());
        //    console.log(key, slice);
        //}
        //
        //// window.RANDOM_IMAGES = window.IMAGES.slice().sort(() => 0.5 - Math.random());
        //
        //console.log("Randomizing images");
        //console.log(window.RANDOM_IMAGES)
      Begin Routine:
        if trials.thisN == 0:
            text.text = welcome_1.text
        elif trials.thisN == 1:
            text.text = welcome_2.text
        elif trials.thisN == 2:
            text.text = welcome_3.text
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent welcome_1
      letterHeight = 0.05
      startVal [time (s)] = 00
      stopVal [duration (s)] = 0
      text = welcome 1
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    TextComponent welcome_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = welcome_2
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    TextComponent welcome_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = welcome 3
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  Routine wait
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine break_2
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 10
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        clock = new util.Clock();
        current_time = 0
        countdown_time = 10
      Begin Routine:
        task_timer = core.CountdownTimer(start = 5)
      Each Frame:
        # end task after 5 secs
        time_left = task_timer.getTime()
        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        text_countdown.text = seconds
        if time_left <= 0.0:
            continueRoutine = False
      Each JS Frame:
        if (current_time >= countdown_time) {
            text_countdown.text = countdown_time
            continueRoutine = false;
        }

        let now = Math.floor(clock.getTime());
        if (now !== current_time) {
          current_time = now;
          text_countdown.text = countdown_time - now;
        }
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = Take a small break
      units = norm
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine welcome
    LoopInitiator loops loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine trial
      Routine wait
    LoopTerminator loops
    Routine break_2
  LoopTerminator trials
